PsychoPy2experiment version="1.90.3"
Settings
  Monitor = retina
  Experiment info = {u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Data filename = u'exp-data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  expName = english
  Screen = 1
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Routines
  Routine introduction
    TextComponent text_2
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
    TextComponent text
      text [set every repeat] = $sentence
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 1
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  Routine end
    TextComponent text_3
      text = +
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.5
      store = nothing
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Flow
  Routine introduction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimuli.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([(u'sentence', u"I'll say 'teep' this Thursday"), (u'frame', u"I'll say '{word}' this Thursday"), (u'word', u'teep')]),
      OrderedDict([(u'sentence', u"I'll say 'teeb' this Thursday"), (u'frame', u"You'll say '{word}' this Monday"), (u'word', u'teeb')]),
      OrderedDict([(u'sentence', u"I'll say 'turp' this Thursday"), (u'frame', u"She'll say '{word}' this Sunday"), (u'word', u'turp')]),
      OrderedDict([(u'sentence', u"I'll say 'turb' this Thursday"), (u'frame', u"We'll say '{word}' this Friday"), (u'word', u'turb')]),
      OrderedDict([(u'sentence', u"I'll say 'tarp' this Thursday"), (u'frame', u"They'll say '{word}' this Tuesday"), (u'word', u'tarp')]),
      OrderedDict([(u'sentence', u"I'll say 'tarb' this Thursday"), (u'frame', u"I'll say '{word}' this Thursday"), (u'word', u'tarb')]),
      OrderedDict([(u'sentence', u"I'll say 'teek' this Thursday"), (u'frame', u"You'll say '{word}' this Monday"), (u'word', u'teek')]),
      OrderedDict([(u'sentence', u"I'll say 'teeg' this Thursday"), (u'frame', u"She'll say '{word}' this Sunday"), (u'word', u'teeg')]),
      OrderedDict([(u'sentence', u"I'll say 'turk' this Thursday"), (u'frame', u"We'll say '{word}' this Friday"), (u'word', u'turk')]),
      OrderedDict([(u'sentence', u"I'll say 'turg' this Thursday"), (u'frame', u"They'll say '{word}' this Tuesday"), (u'word', u'turg')]),
      OrderedDict([(u'sentence', u"I'll say 'tark' this Thursday"), (u'frame', u"I'll say '{word}' this Thursday"), (u'word', u'tark')])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
    Routine trial
  LoopTerminator trials
  Routine end
