PsychoPy2experiment version="1.90.3"
Settings
  Monitor = testMonitor
  Experiment info = {u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Data filename = u'results/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  expName = italian-egg
  Screen = 1
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Routines
  Routine introduction
    TextComponent text_2
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
    TextComponent text
      text [set every repeat] = $stimulus
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 1
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  Routine end
    TextComponent text_3
      text = Grazie!
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.5
      store = nothing
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Flow
  Routine introduction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimuli.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'sentence': u'Scrivete X sul foglio', 'consonant_1': u'p', 'consonant_2': u'p', 'height': u'low', 'place_2': u'labial', 'place_1': u'labial', 'stimulus_id': 1, 'vowel': u'a', 'word': u'papo', 'stimulus': u'Scrivete "papo" sul foglio', 'backness': u'central'},
      {'sentence': u'Ha detto X sei volte', 'consonant_1': u'p', 'consonant_2': u'p', 'height': u'low', 'place_2': u'labial', 'place_1': u'labial', 'stimulus_id': 2, 'vowel': u'a', 'word': u'papo', 'stimulus': u'Ha detto "papo" sei volte', 'backness': u'central'},
      {'sentence': u'Sentivo X di nuovo', 'consonant_1': u'p', 'consonant_2': u'p', 'height': u'low', 'place_2': u'labial', 'place_1': u'labial', 'stimulus_id': 3, 'vowel': u'a', 'word': u'papo', 'stimulus': u'Sentivo "papo" di nuovo', 'backness': u'central'},
      {'sentence': u'Ripete X da sempre', 'consonant_1': u'p', 'consonant_2': u'p', 'height': u'low', 'place_2': u'labial', 'place_1': u'labial', 'stimulus_id': 4, 'vowel': u'a', 'word': u'papo', 'stimulus': u'Ripete "papo" da sempre', 'backness': u'central'},
      {'sentence': u'Scrivete X sul foglio', 'consonant_1': u'p', 'consonant_2': u'p', 'height': u'mid-high', 'place_2': u'labial', 'place_1': u'labial', 'stimulus_id': 5, 'vowel': u'e', 'word': u'pepo', 'stimulus': u'Scrivete "pepo" sul foglio', 'backness': u'front'}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
    Routine trial
  LoopTerminator trials
  Routine end
