PsychoPy2experiment version="1.85.2"
Settings
  Monitor = testMonitor
  Experiment info = {u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  expName = lombard-pilot
  Screen = 1
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Routines
  Routine trial
    TextComponent text
      text [set every repeat] = $sentence
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    KeyboardComponent key_resp_1
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 1
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = prompts.csv
    loopType = random
    nReps = 5
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    conditions:
      [{'item': 1, 'translation': u'I see the lake', 'gloss': u'lake', 'word': u'lagh', 'sentence': u'A vighi ul lagh'},
      {'item': 2, 'translation': u'I am thirsty', 'gloss': u'thirst', 'word': u'sed', 'sentence': u"A g'ho sed"},
      {'item': 3, 'translation': u'I see the fig', 'gloss': u'fig', 'word': u'figh', 'sentence': u'A vighi ul figh'},
      {'item': 4, 'translation': u'I see the nose', 'gloss': u'nose', 'word': u'nas', 'sentence': u'A vighi ul nas'},
      {'item': 5, 'translation': u'I see the boy', 'gloss': u'boy', 'word': u'tus', 'sentence': u'A vighi ul tus'},
      {'item': 6, 'translation': u'I see the fire', 'gloss': u'fire', 'word': u'f\xf6gh', 'sentence': u'A vighi ul f\xf6gh'},
      {'item': 7, 'translation': u'I see the hunchback', 'gloss': u'hunchback', 'word': u'g\xf6b', 'sentence': u'A vighi ul g\xf6b'},
      {'item': 8, 'translation': u'That one is new', 'gloss': u'new.ms', 'word': u'n\xf6v', 'sentence': u"Cul l\xec l'\xe8 n\xf6v"},
      {'item': 9, 'translation': u'It is not the way', 'gloss': u'way', 'word': u'm\xf6d', 'sentence': u"L'\xe8 mia ul m\xf6d"},
      {'item': 10, 'translation': u'I see the sack', 'gloss': u'sack', 'word': u'sach', 'sentence': u'A vighi ul sach'},
      {'item': 11, 'translation': u'I have seven of them', 'gloss': u'seven', 'word': u'set', 'sentence': u"A n'ho set"},
      {'item': 12, 'translation': u"I didn't give anything", 'gloss': u'stroke', 'word': u'pich', 'sentence': u"A g'ho dai un pich"}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
    Routine trial
  LoopTerminator trials
