PsychoPy2experiment version="1.85.4"
Settings
  Monitor = testMonitor
  Experiment info = {u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Save log file = False
  Data filename = u'results/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  expName = perceptual-pilot
  Screen = 1
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Routines
  Routine train_2
    SoundComponent sound_3
      sound [set every repeat] = $file_name
      stopVal [duration (s)] = 3.5
      startVal [time (s)] = 0.5
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    TextComponent text_6
      text = t                   d
      stopVal [duration (s)] = 4
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    KeyboardComponent key_resp_6
      correctAns = $correct_answer
      storeCorrect = True
      stopVal [duration (s)] = 3
      forceEndRoutine = True
      allowedKeys = 'z', 'slash'
      startVal [time (s)] = 1
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  Routine end
    TextComponent text_14
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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      text:
        L'esperimento è finito!

        Grazie!

        Premi la barra spaziatrice per uscire.
    KeyboardComponent key_resp_13
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.8
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  Routine feedback
    CodeComponent code
      Begin Experiment:
        msg='doh!'
      Begin Routine:
        if not key_resp_3.keys :
            msg="Non hai risposto."
            msg_colour = "white"
        elif key_resp_3.corr:#stored on last run routine
            msg="Corretto!"
            msg_colour = "lime"
        else:
            msg="Ops! Sbagliato."
            msg_colour = "red"
    TextComponent text_4
      color [set every repeat] = $msg_colour
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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  Routine instructions_4
    TextComponent text_12
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Prima di iniziare l'esperimento, faremo una veloce prova.

        Come nell'esperimento vero e proprio, dovrai dire se la parola che hai sentito contiene una "t" o una "d". Dopo aver dato la risposta, vedrai un messaggio che ti dirà se hai risposto correttamente o meno.

        (premi la barra spaziatrice per continuare, l'esperimento non inizierà per ora)
    KeyboardComponent key_resp_11
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 3
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  Routine instructions_5
    TextComponent text_13
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Questa prova potrà sembrarti semplice, ma considera che serve solo per farti familiarizzare con l'esperimento.

        Posiziona ora l'indice della mano sinistra e della mano destra sui tasti.

        Quando sei pronta/o per iniziare la prova, premi la barra spaziatrice sulla tastiera.

        (premi la barra spaziatrice per iniziare la prova)
    KeyboardComponent key_resp_12
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 3
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  Routine ready_2
    TextComponent text_8
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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      text:
        La prova è terminata.

        Ora possiamo passare all'esperimento vero e proprio.

        Quando sei pronta/o per iniziare, premi la barra spaziatrice sulla tastiera.
    KeyboardComponent key_resp_7
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine instructions_2
    TextComponent text_10
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Le parole che sentirai sono parole inventante e iniziano tutte con una "p". Per esempio: "pata", "pudu".

        Una volta ascoltata la parola, dovrai premere il tasto per la "t" se pensi che la seconda consonante era una "t" o il tasto per la "d" se pensi che la seconda consonante era una "d".

        (premi la barra spaziatrice per continuare, l'esperimento non inizierà per ora)
    KeyboardComponent key_resp_9
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 3
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  Routine instructions_3
    TextComponent text_11
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Potrai ascoltare ogni parola solo una volta. Dopo aver sentito una parola, dovrai premere un tasto per indicare se la parola aveva una "t" o una "d". Le lettere che vedrai sullo schermo ti aiuteranno a ricordare quale tasto premere.

        Cerca di rispondere velocemente ma accuratamente.

        (premi la barra spaziatrice per continuare, l'esperimento non inizierà per ora)
    KeyboardComponent key_resp_10
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 3
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  Routine feedback_2
    CodeComponent code_2
      Begin Experiment:
        msg='doh!'
      Begin Routine:
        if not key_resp_6.keys :
            msg="Non hai risposto."
            msg_colour = "white"
        elif key_resp_6.corr:#stored on last run routine
            msg="Corretto!"
            msg_colour = "lime"
        else:
            msg="Ops! Sbagliato."
            msg_colour = "red"
    TextComponent text_7
      color [set every repeat] = $msg_colour
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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  Routine trial
    SoundComponent sound_1
      sound [set every repeat] = $file_name
      startVal [time (s)] = 0.5
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    TextComponent text
      text = d                   t
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'z', 'slash'
      startVal [time (s)] = 1
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  Routine train
    SoundComponent sound_2
      sound [set every repeat] = $file_name
      stopVal [duration (s)] = 3.5
      startVal [time (s)] = 0.5
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    TextComponent text_2
      text = d                   t
      stopVal [duration (s)] = 4
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    KeyboardComponent key_resp_3
      correctAns = $correct_answer
      storeCorrect = True
      stopVal [duration (s)] = 3
      forceEndRoutine = True
      allowedKeys = 'z', 'slash'
      startVal [time (s)] = 1
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  Routine ready
    TextComponent text_3
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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      text:
        La prova è terminata.

        Ora possiamo passare all'esperimento vero e proprio.

        Quando sei pronta/o per iniziare, premi la barra spaziatrice sulla tastiera.
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine trial_2
    SoundComponent sound_4
      sound [set every repeat] = $file_name
      startVal [time (s)] = 0.5
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    TextComponent text_9
      text = t                   d
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    KeyboardComponent key_resp_8
      forceEndRoutine = True
      allowedKeys = 'z', 'slash'
      startVal [time (s)] = 1
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  Routine instructions
    TextComponent text_5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Grazie per aver accettato di partecipare a questo esperimento.

        Quello che devi fare è semplicemente ascoltare delle parole e dire se secondo te la seconda consonante è una "t" o una "d"

        (premi la barra spaziatrice per continuare, l'esperimento non inizierà per ora)
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 3
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Flow
  LoopInitiator trials_7 loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine instructions
    Routine instructions_2
    Routine instructions_3
    Routine instructions_4
  LoopTerminator trials_7
  Routine instructions_5
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = random
    nReps = int(expInfo['participant'][-3:]) % 2 == 1
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    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = stimuli-train-tright.csv
      loopType = random
      nReps = 2
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      conditions:
        [{'file_name': u'../data/raw/stimuli/pada.wav', 'index': 1, 'vowel': u'a', 'burst': 0, 'voicing': 5, 'correct_answer': u'z', 'side_condition': u't_right', 'condition': u'confound'},
        {'file_name': u'../data/raw/stimuli/pata0.wav', 'index': 2, 'vowel': u'a', 'burst': 5, 'voicing': 0, 'correct_answer': u'slash', 'side_condition': u't_right', 'condition': u'voicing'},
        {'file_name': u'../data/raw/stimuli/pidi.wav', 'index': 3, 'vowel': u'i', 'burst': 0, 'voicing': 5, 'correct_answer': u'z', 'side_condition': u't_right', 'condition': u'confound'},
        {'file_name': u'../data/raw/stimuli/piti0.wav', 'index': 4, 'vowel': u'i', 'burst': 5, 'voicing': 0, 'correct_answer': u'slash', 'side_condition': u't_right', 'condition': u'voicing'},
        {'file_name': u'../data/raw/stimuli/pudu.wav', 'index': 5, 'vowel': u'u', 'burst': 0, 'voicing': 5, 'correct_answer': u'z', 'side_condition': u't_right', 'condition': u'confound'},
        {'file_name': u'../data/raw/stimuli/putu0.wav', 'index': 6, 'vowel': u'u', 'burst': 5, 'voicing': 0, 'correct_answer': u'slash', 'side_condition': u't_right', 'condition': u'voicing'}]
      Routine train
      Routine feedback
    LoopTerminator trials_2
    Routine ready
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = stimuli-tright.csv
      loopType = random
      nReps = 5
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      conditions:
        [{'index': 1, 'burst': 0, 'voicing': 5, 'file_name': u'../data/raw/stimuli/pada.wav', 'vowel': u'a', 'side_condition': u't_right', 'condition': u'confound'},
        {'index': 2, 'burst': 0, 'voicing': 0, 'file_name': u'../data/raw/stimuli/pada0.wav', 'vowel': u'a', 'side_condition': u't_right', 'condition': u'burst'},
        {'index': 3, 'burst': 1, 'voicing': 0, 'file_name': u'../data/raw/stimuli/pada1.wav', 'vowel': u'a', 'side_condition': u't_right', 'condition': u'burst'},
        {'index': 4, 'burst': 2, 'voicing': 0, 'file_name': u'../data/raw/stimuli/pada2.wav', 'vowel': u'a', 'side_condition': u't_right', 'condition': u'burst'},
        {'index': 5, 'burst': 3, 'voicing': 0, 'file_name': u'../data/raw/stimuli/pada3.wav', 'vowel': u'a', 'side_condition': u't_right', 'condition': u'burst'},
        {'index': 6, 'burst': 4, 'voicing': 0, 'file_name': u'../data/raw/stimuli/pada4.wav', 'vowel': u'a', 'side_condition': u't_right', 'condition': u'burst'},
        {'index': 7, 'burst': 5, 'voicing': 0, 'file_name': u'../data/raw/stimuli/pada5.wav', 'vowel': u'a', 'side_condition': u't_right', 'condition': u'burst'},
        {'index': 8, 'burst': 5, 'voicing': 0, 'file_name': u'../data/raw/stimuli/pata0.wav', 'vowel': u'a', 'side_condition': u't_right', 'condition': u'voicing'},
        {'index': 9, 'burst': 5, 'voicing': 1, 'file_name': u'../data/raw/stimuli/pata1.wav', 'vowel': u'a', 'side_condition': u't_right', 'condition': u'voicing'}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
      Routine trial
    LoopTerminator trials
  LoopTerminator trials_3
  LoopInitiator trials_4 loopType="TrialHandler"
    loopType = random
    nReps = int(expInfo['participant'][-3:]) % 2 == 0
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    LoopInitiator trials_5 loopType="TrialHandler"
      conditionsFile = stimuli-train-tleft.csv
      loopType = random
      nReps = 2
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      conditions:
        [{'file_name': u'../data/raw/stimuli/pada.wav', 'index': 1, 'vowel': u'a', 'burst': 0, 'voicing': 5, 'correct_answer': u'slash', 'side_condition': u't_left', 'condition': u'confound'},
        {'file_name': u'../data/raw/stimuli/pata0.wav', 'index': 2, 'vowel': u'a', 'burst': 5, 'voicing': 0, 'correct_answer': u'z', 'side_condition': u't_left', 'condition': u'voicing'},
        {'file_name': u'../data/raw/stimuli/pidi.wav', 'index': 3, 'vowel': u'i', 'burst': 0, 'voicing': 5, 'correct_answer': u'slash', 'side_condition': u't_left', 'condition': u'confound'},
        {'file_name': u'../data/raw/stimuli/piti0.wav', 'index': 4, 'vowel': u'i', 'burst': 5, 'voicing': 0, 'correct_answer': u'z', 'side_condition': u't_left', 'condition': u'voicing'},
        {'file_name': u'../data/raw/stimuli/pudu.wav', 'index': 5, 'vowel': u'u', 'burst': 0, 'voicing': 5, 'correct_answer': u'slash', 'side_condition': u't_left', 'condition': u'confound'},
        {'file_name': u'../data/raw/stimuli/putu0.wav', 'index': 6, 'vowel': u'u', 'burst': 5, 'voicing': 0, 'correct_answer': u'z', 'side_condition': u't_left', 'condition': u'voicing'}]
      Routine train_2
      Routine feedback_2
    LoopTerminator trials_5
    Routine ready_2
    LoopInitiator trials_6 loopType="TrialHandler"
      conditionsFile = stimuli-tleft.csv
      loopType = random
      nReps = 5
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      conditions:
        [{'index': 1, 'burst': 0, 'voicing': 5, 'file_name': u'../data/raw/stimuli/pada.wav', 'vowel': u'a', 'side_condition': u't_right', 'condition': u'confound'},
        {'index': 2, 'burst': 0, 'voicing': 0, 'file_name': u'../data/raw/stimuli/pada0.wav', 'vowel': u'a', 'side_condition': u't_right', 'condition': u'burst'},
        {'index': 3, 'burst': 1, 'voicing': 0, 'file_name': u'../data/raw/stimuli/pada1.wav', 'vowel': u'a', 'side_condition': u't_right', 'condition': u'burst'},
        {'index': 4, 'burst': 2, 'voicing': 0, 'file_name': u'../data/raw/stimuli/pada2.wav', 'vowel': u'a', 'side_condition': u't_right', 'condition': u'burst'},
        {'index': 5, 'burst': 3, 'voicing': 0, 'file_name': u'../data/raw/stimuli/pada3.wav', 'vowel': u'a', 'side_condition': u't_right', 'condition': u'burst'},
        {'index': 6, 'burst': 4, 'voicing': 0, 'file_name': u'../data/raw/stimuli/pada4.wav', 'vowel': u'a', 'side_condition': u't_right', 'condition': u'burst'},
        {'index': 7, 'burst': 5, 'voicing': 0, 'file_name': u'../data/raw/stimuli/pada5.wav', 'vowel': u'a', 'side_condition': u't_right', 'condition': u'burst'},
        {'index': 8, 'burst': 5, 'voicing': 0, 'file_name': u'../data/raw/stimuli/pata0.wav', 'vowel': u'a', 'side_condition': u't_right', 'condition': u'voicing'},
        {'index': 9, 'burst': 5, 'voicing': 1, 'file_name': u'../data/raw/stimuli/pata1.wav', 'vowel': u'a', 'side_condition': u't_right', 'condition': u'voicing'}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
      Routine trial_2
    LoopTerminator trials_6
  LoopTerminator trials_4
  Routine end
