PsychoPy2experiment version="1.90.3"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Data filename = u'results/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  expName = perceptual
  Screen = 1
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Routines
  Routine fixation
    TextComponent text
      text = +
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    StaticComponent ISI
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
  Routine trial
    SoundComponent sound_1
      sound [set every repeat] = $sound_first
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
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    SoundComponent sound_2
      sound [set every repeat] = $sound_second
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 1.25
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    SoundComponent sound_3
      sound [set every repeat] = $sound_third
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 3
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'z', 'slash'
      startVal [time (s)] = 3.5
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    TextComponent text_3
      text = 1              2
      startVal [time (s)] = 3.5
      letterHeight = 0.1
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  Routine choice
    TextComponent text_2
      text = A               B
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'z', 'slash'
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = sounds.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([(u'index', 1), (u'sound_first', u'../data/raw/stimuli/pata_0.wav'), (u'sound_second', u'../data/raw/stimuli/pata_a_5.wav'), (u'sound_third', u'../data/raw/stimuli/pata_0.wav')]),
      OrderedDict([(u'index', 2), (u'sound_first', u'../data/raw/stimuli/pata_a_5.wav'), (u'sound_second', u'../data/raw/stimuli/pata_0.wav'), (u'sound_third', u'../data/raw/stimuli/pata_0.wav')]),
      OrderedDict([(u'index', 3), (u'sound_first', u'../data/raw/stimuli/pata_0.wav'), (u'sound_second', u'../data/raw/stimuli/pata_a_5.wav'), (u'sound_third', u'../data/raw/stimuli/pata_v_1.wav')]),
      OrderedDict([(u'index', 4), (u'sound_first', u'../data/raw/stimuli/pata_a_5.wav'), (u'sound_second', u'../data/raw/stimuli/pata_0.wav'), (u'sound_third', u'../data/raw/stimuli/pata_v_1.wav')]),
      OrderedDict([(u'index', 5), (u'sound_first', u'../data/raw/stimuli/pata_0.wav'), (u'sound_second', u'../data/raw/stimuli/pata_a_5.wav'), (u'sound_third', u'../data/raw/stimuli/pata_v_2.wav')]),
      OrderedDict([(u'index', 6), (u'sound_first', u'../data/raw/stimuli/pata_a_5.wav'), (u'sound_second', u'../data/raw/stimuli/pata_0.wav'), (u'sound_third', u'../data/raw/stimuli/pata_v_2.wav')]),
      OrderedDict([(u'index', 7), (u'sound_first', u'../data/raw/stimuli/pata_0.wav'), (u'sound_second', u'../data/raw/stimuli/pata_a_5.wav'), (u'sound_third', u'../data/raw/stimuli/pata_v_3.wav')])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
    Routine fixation
    Routine trial
  LoopTerminator trials
